PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 990]
  color = $[-1,-1,-1]
  expName = mprax
  logging level = debug
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Routines
  Routine intro
    TextComponent introduction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is a test of your ability to control the mouse.

        You will see some green boxes, one at a time. Move your mouse cursor over each box and click on it ONCE.
    MouseComponent cont
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveParamsClickable = name
      startVal [time (s)] = 3
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    TextboxComponent clickhere
      autoLog = False
      bold = False
      editable = False
      fillColor = green
      letterHeight = 0.02
      padding = None
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.25, 0.03)
      text =    Click here to continue
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  Routine prac
    TextComponent beginprac
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = BEGIN PRACTICE
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  Routine newblock
    TextComponent fivesec
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        This time you will have 5 seconds to click on each box.

        Try to click on the box before it disappears.
  Routine begin
    TextComponent practice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = BEGIN PRACTICE
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  Routine pracblock
    ImageComponent prtarget
      image [set every repeat] = $target_file
      pos [set every repeat] = (target_x, target_y)
      size [set every repeat] = (target_w, target_h)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    MouseComponent prresp
      clickable = prtarget
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name, image
      startVal [time (s)] = 0.0
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    TextComponent prinst
      letterHeight = 0.025
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Click on the green box to continue
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  Routine testblock
    ImageComponent target
      image [set every repeat] = $target_file
      pos [set every repeat] = (target_x, target_y)
      size [set every repeat] = (target_w, target_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      texture resolution = 512
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    MouseComponent resp
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name, image
      startVal [time (s)] = 0.0
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    TextComponent instr
      letterHeight = 0.025
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Click on the green box to continue
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    CodeComponent NoResp
      Code Type = Auto->JS
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      Begin Experiment:
        end_at_5s=False
      Each Frame:
        # first check whether to end in response to an earlier keypress
        if t >= 5.0 and end_at_5s:
            continueRoutine = False
        elif t >= 5.0: # all trials end at this stage
            continueRoutine = False

        # otherwise, check for a new keypress:
        keys = event.getKeys()

        if keys: # if at least one key exists in the list,
            if 'escape' in keys: # now need to check for the quit key ourselves
                core.quit()

            elif t < 5.0: # just remember this for later
                end_at_5s = True
                thisExp.addData('RT', t) # but store the current time as the RT

            else: # we have a keypress between 2 and 4 s
                thisExp.addData('RT', t)
                continueRoutine = False
        else: #add this
              thisExp.addData('RT', None) #and this
Flow
  Routine intro
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('target_file', 'images/I.png'), ('target_x', 0.16), ('target_y', 0.0), ('target_w', 0.4), ('target_h', 0.4)]),
      OrderedDict([('target_file', 'images/II.png'), ('target_x', -0.16), ('target_y', -0.03), ('target_w', 0.36), ('target_h', 0.36)]),
      OrderedDict([('target_file', 'images/III.png'), ('target_x', 0.28), ('target_y', 0.03), ('target_w', 0.32), ('target_h', 0.32)]),
      OrderedDict([('target_file', 'images/IV.png'), ('target_x', -0.28), ('target_y', 0.03), ('target_w', 0.28), ('target_h', 0.28)]),
      OrderedDict([('target_file', 'images/V.png'), ('target_x', 0.28), ('target_y', -0.03), ('target_w', 0.24), ('target_h', 0.24)]),
      OrderedDict([('target_file', 'images/VI.png'), ('target_x', -0.28), ('target_y', -0.03), ('target_w', 0.2), ('target_h', 0.2)]),
      OrderedDict([('target_file', 'images/VII.png'), ('target_x', -0.28), ('target_y', 0.03), ('target_w', 0.16), ('target_h', 0.16)]),
      OrderedDict([('target_file', 'images/VIII.png'), ('target_x', 0.28), ('target_y', 0.05), ('target_w', 0.12), ('target_h', 0.12)]),
      OrderedDict([('target_file', 'images/IX.png'), ('target_x', -0.28), ('target_y', 0.05), ('target_w', 0.08), ('target_h', 0.08)]),
      OrderedDict([('target_file', 'images/X.png'), ('target_x', 0.28), ('target_y', 0.03), ('target_w', 0.04), ('target_h', 0.04)])]
    Routine pracblock
  LoopTerminator trials
  Routine newblock
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('target_file', 'images/I.png'), ('target_x', 0.16), ('target_y', 0.0), ('target_w', 0.4), ('target_h', 0.4)]),
      OrderedDict([('target_file', 'images/II.png'), ('target_x', -0.16), ('target_y', -0.03), ('target_w', 0.36), ('target_h', 0.36)]),
      OrderedDict([('target_file', 'images/III.png'), ('target_x', 0.28), ('target_y', 0.03), ('target_w', 0.32), ('target_h', 0.32)]),
      OrderedDict([('target_file', 'images/IV.png'), ('target_x', -0.28), ('target_y', 0.03), ('target_w', 0.28), ('target_h', 0.28)]),
      OrderedDict([('target_file', 'images/V.png'), ('target_x', 0.28), ('target_y', -0.03), ('target_w', 0.24), ('target_h', 0.24)]),
      OrderedDict([('target_file', 'images/VI.png'), ('target_x', -0.28), ('target_y', -0.03), ('target_w', 0.2), ('target_h', 0.2)]),
      OrderedDict([('target_file', 'images/VII.png'), ('target_x', -0.28), ('target_y', 0.03), ('target_w', 0.16), ('target_h', 0.16)]),
      OrderedDict([('target_file', 'images/VIII.png'), ('target_x', 0.28), ('target_y', 0.05), ('target_w', 0.12), ('target_h', 0.12)]),
      OrderedDict([('target_file', 'images/IX.png'), ('target_x', -0.28), ('target_y', 0.05), ('target_w', 0.08), ('target_h', 0.08)]),
      OrderedDict([('target_file', 'images/X.png'), ('target_x', 0.28), ('target_y', 0.03), ('target_w', 0.04), ('target_h', 0.04)])]
    Routine testblock
  LoopTerminator trials_2
